CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^C(?P<Channel>[1-3])-(?P<Mouse>.*)_(?P<ImageNumber>[0-9]{1,2})_MMStack.ome.tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C1")
    Name to assign these images:OrigBlue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C2")
    Name to assign these images:OrigGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:ImageNumber

IdentifyPrimaryObjects:[module_num:5|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notes:['The dna channel, e.g. DAPI, is perfect for segmenting individual cells. Given that these cells are well spaced, declumping cells by shape is effective.']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
    Select the input image:OrigBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
Smooth:[module_num:6|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enabled:False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
    Select the input image:OrigGreen
    Name the output image:FilteredOrigGreen
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:20
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
IdentifyPrimaryObjects:[module_num:7|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notes:['The phosphorylated histone probe is a marker for detecting mitotic cells. By segmenting this channel, a threshold is automatically chosen that identifies the pixels that are "positive" for the PH3 probe. This method will yield inconsistent results if there are no mitotic cells in view, so a minimum threshold value is chosen. This minimum is chosen hueristically, based upon the threshold chosen by this module, e.g. half the chosen threshold.']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
    Select the input image:OrigGreen
    Name the primary objects to be identified:Ki67
    Typical diameter of objects, in pixel units (Min,Max):2,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
SplitOrMergeObjects:[module_num:8|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
    Select the input objects:Ki67
    Name the new objects:mergedKi67
    Operation:Merge
    Maximum distance within which to merge objects:10
    Merge using a grayscale image?:No
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    Merging method:Distance
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
RelateObjects:[module_num:9|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notes:['The ph3 probe and dna stain overlap with each other, so this co-localization can be used to classify cells. This is relatioship is ennumerated by the RelateObjects module and the labels from one set of objects is mapped into another set of objects.']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
    Parent objects:Nuclei
    Child objects:mergedKi67
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
FilterObjects:[module_num:10|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notes:['After the relationship between objects has been ennumerated, the FilterObjects module can transform this relationship into a binary relationship, i.e. 0 if there is no PH3 and 1 if there is PH3.']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
    Select the objects to filter:Nuclei
    Name the output objects:Ki67PosNuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Children_mergedKi67_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
ConvertObjectsToImage:[module_num:11|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
    Select the input objects:Ki67PosNuclei
    Name the output image:Ki67PosNucleiImg
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:Ki67PosNucleiImg
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Ki67PosNucleiImg
    Number of digits:4
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    Saved file format:jpeg
    Output file location:Default Input Folder sub-folder|Desktop\\\\\\\\TEST Ki67 SEDIFA oct18\\\\\\\\Ki67_SEDIFA_PEA28_DAOY\\\\\\\\control
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ConvertObjectsToImage:[module_num:13|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
    Select the input objects:Ki67
    Name the output image:Ki67Img
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:Ki67Img
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Ki67Img
    Number of digits:4
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    Saved file format:jpeg
    Output file location:Default Input Folder sub-folder|Desktop\\\\\\\\TEST Ki67 SEDIFA oct18\\\\\\\\Ki67_SEDIFA_PEA28_DAOY\\\\\\\\control
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ConvertObjectsToImage:[module_num:15|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
    Select the input objects:Nuclei
    Name the output image:NucleiImg
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:NucleiImg
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:NucleiImg
    Number of digits:4
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    Saved file format:jpeg
    Output file location:Default Input Folder sub-folder|Desktop\\\\\\\\TEST Ki67 SEDIFA oct18\\\\\\\\Ki67_SEDIFA_PEA28_DAOY\\\\\\\\control
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
CalculateMath:[module_num:17|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notes:['The module is for convenience. The percentage of cells positive for PH3 could be calculated from the exported spreadsheet. However, it is a simple enough metric that it can be directly calculated in the pipeline.']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
    Name the output measurement:PercentPositive
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_Ki67PosNuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Count_Nuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop\\\\\\\\TEST Ki67 SEDIFA oct18\\\\\\\\Ki67_SEDIFA_PEA28_DAOY\\\\\\\\control
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Count_Ki67,Image|Count_Nuclei,Image|Count_Ki67PosNuclei,Image|Math_PercentPositive,Ki67PosNuclei|Number_Object_Number,Ki67|Number_Object_Number,Nuclei|Number_Object_Number
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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